PsychoPy2experiment version="3.0.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
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Routines
  Routine instr
    TextComponent welcome
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Willkommen bei unserer Brainwave Studie.

        Die Studie wird etwa 30 Minuten in Anspruch nehmen.

        Bitte nimm nun bequem Platz und versuche Dich während einer Aufgabe so wenig wie möglich zu bewegen. Während der Pausen darfst du dich gerne bewegen.


        Wenn Du bereit bist zu beginnen drücke bitte einmal die Leertaste. Mit der Leertaste kannst Du im gesamten Verlauf zum nächsten Schritt navigieren.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_serial
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'a')
        ser.close()
  Routine baseline_recording
    TextComponent starting_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.7
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      text:
        Lass uns anfangen.

        Lass Deine Augen nun für 20 Sekunden geöffnet und entspanne Dich.

        Versuche, wenn möglich, während der 20 Sekunden nicht zu blinzeln.
    TextComponent count_3
      letterHeight = 0.2
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_112
      letterHeight = 0.2
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_238
      letterHeight = 0.2
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.0
      text = 1
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    ImageComponent eyes_opened
      image = C:\Experiment\baseline\open.jpg
      pos = (0.0, 0.0)
      size = (1, 0.5)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 20
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    TextComponent text_218
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent text_219
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_220
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_221
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 1.0
      text = 4
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    TextComponent text_222
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent text_223
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 1.0
      text = 6
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    TextComponent text_224
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 1.0
      text = 7
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    TextComponent text_225
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 1.0
      text = 8
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    TextComponent text_226
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 17
      stopVal [duration (s)] = 1.0
      text = 9
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    TextComponent text_227
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 18
      stopVal [duration (s)] = 1.0
      text = 10
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    TextComponent text_228
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 19
      stopVal [duration (s)] = 1.0
      text = 11
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    TextComponent text_229
      letterHeight = 0.08
      pos = (0, -0.35)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 1.0
      text = 12
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
    TextComponent text_216
      letterHeight = 0.08
      startVal [time (s)] = 28
      stopVal [duration (s)] = 1.0
      text = 20
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    TextComponent rest
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 30
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      text:
        Entspanne Dich nun für 20 Sekunden mit geschlossenen Augen.

        Lass Deine Augen so lange geschlossen, bis Du ein akustisches Signal wahrnimmst.

        Schließe jetzt Deine Augen, und drücke die Leertaste um zu starten.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 30
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    ImageComponent eyes_closed
      image = C:\Experiment\baseline\closed.jpg
      pos = (0, 0.25)
      size = (1, 0.4)
      startVal [time (s)] = 30
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    CodeComponent code_serial_2
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'b')
        ser.close()
  Routine n400_video
    TextComponent introduction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Das Video beginnt jetzt gleich.

        Schaue aufmerksam zu.
    MovieComponent movie_1
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = C:\Experiment\Semantic Priming Video\auto.avi
      size = [1.8,1.8]
      startVal [time (s)] = 7
      stopVal [duration (s)] = 24
      units = norm
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    TextComponent outro
      letterHeight = 0.04
      startVal [time (s)] = 32
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      text:
        Bitte notiere drei Begriffe, die Du mit dem Video assoziierst an der dafür vorgesehenen Stelle auf Deinem Papier.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 32
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    CodeComponent code_serial_3
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'j')
        ser.close()
  Routine n400_video_2
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = C:\Experiment\Semantic Priming Video\auto.avi
      size = [1.8,1.8]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 24
      units = norm
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    TextComponent outro_2
      letterHeight = 0.04
      startVal [time (s)] = 26
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      text:
        Du wirst nun erneut eine Wörterserie sehen. Lies aufmerksam mit.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 26
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    CodeComponent code_serial_5
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'q')
        ser.close()
  Routine n400_subliminal_video
    TextComponent introduction_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Das Video beginnt jetzt.

        Schaue aufmerksam zu.
    MovieComponent movie_2
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = C:\Experiment\Subliminal Priming Video\Video with stimulus.avi
      size = [1.8,1.8]
      startVal [time (s)] = 7
      stopVal [duration (s)] = 63
      units = norm
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    TextComponent outro_3
      letterHeight = 0.04
      startVal [time (s)] = 71
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      text:
        Danke, Du hast 4 von 8 Aufgaben abgeschlossen.


        Als nächstes werden Dir einzelne Wörter gezeigt. Diese ergeben Sätze. Lies aufmerksam mit und versuche Dir die Sätze bildlich vorzustellen.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 71
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    CodeComponent code_serial_6
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'm')
        ser.close()
  Routine sentence_series_part1
    TextComponent text_214
      letterHeight = 0.25
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text = +
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    TextComponent text_90
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
      text = I
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    TextComponent text_91
      letterHeight = 0.1
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 0.5
      text = drink
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    TextComponent text_92
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.5
      text = coffee
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    TextComponent text_93
      letterHeight = 0.1
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 0.5
      text = with
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    TextComponent text_94
      letterHeight = 0.1
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
      text = milk
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    TextComponent text_95
      letterHeight = 0.1
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 0.5
      text = and
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    TextComponent text_96
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.8
      text = sugar.
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    TextComponent text_98
      letterHeight = 0.095
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 0.5
      text = Ted
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    TextComponent text_99
      letterHeight = 0.095
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      text = smiled
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    TextComponent text_100
      letterHeight = 0.095
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 0.5
      text = and
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    TextComponent text_101
      letterHeight = 0.095
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.5
      text = bit
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    TextComponent text_102
      letterHeight = 0.095
      startVal [time (s)] = 11.5
      stopVal [duration (s)] = 0.5
      text = his
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    TextComponent text_103
      letterHeight = 0.095
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
      text = bottom
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    TextComponent text_104
      letterHeight = 0.095
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 0.8
      text = lip.
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    TextComponent text_105
      letterHeight = 0.09
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.5
      text = The
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    TextComponent text_106
      letterHeight = 0.09
      startVal [time (s)] = 14.5
      stopVal [duration (s)] = 0.5
      text = prison
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    TextComponent text_107
      letterHeight = 0.09
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.5
      text = guard
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    TextComponent text_108
      letterHeight = 0.09
      startVal [time (s)] = 15.5
      stopVal [duration (s)] = 0.5
      text = walked
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    TextComponent text_109
      letterHeight = 0.09
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.5
      text = along
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    TextComponent text_110
      letterHeight = 0.09
      startVal [time (s)] = 16.5
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_111
      letterHeight = 0.09
      startVal [time (s)] = 17
      stopVal [duration (s)] = 0.8
      text = row.
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    TextComponent text_113
      letterHeight = 0.085
      startVal [time (s)] = 18.5
      stopVal [duration (s)] = 0.5
      text = I
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    TextComponent ext_114
      letterHeight = 0.085
      startVal [time (s)] = 19
      stopVal [duration (s)] = 0.5
      text = drink
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  Routine sentence_series_part2
    TextComponent text_114
      letterHeight = 0.085
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = coffee
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    TextComponent text_115
      letterHeight = 0.085
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = with
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    TextComponent text_116
      letterHeight = 0.085
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = milk
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    TextComponent text_117
      letterHeight = 0.085
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
      text = and
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    TextComponent text_118
      letterHeight = 0.085
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.8
      text = sugar.
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    TextComponent text_119
      letterHeight = 0.08
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.5
      text = A
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    TextComponent text_120
      letterHeight = 0.08
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.5
      text = horse
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    TextComponent text_121
      letterHeight = 0.08
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 0.5
      text = has
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    TextComponent text_122
      letterHeight = 0.08
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
      text = thrown
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    TextComponent text_123
      letterHeight = 0.08
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 0.5
      text = a
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    TextComponent text_124
      letterHeight = 0.08
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.8
      text = shoe.
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    TextComponent text_125
      letterHeight = 0.075
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 0.5
      text = Ted
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    TextComponent text_126
      letterHeight = 0.075
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.5
      text = smiled
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    TextComponent text_127
      letterHeight = 0.075
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 0.5
      text = and
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    TextComponent text_128
      letterHeight = 0.075
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.5
      text = bit
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    TextComponent text_129
      letterHeight = 0.075
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 0.5
      text = his
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    TextComponent text_130
      letterHeight = 0.075
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      text = bottom
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    TextComponent text_131
      letterHeight = 0.075
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 0.8
      text = lip.
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    TextComponent text_132
      letterHeight = 0.07
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
      text = The
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    TextComponent text_133
      letterHeight = 0.07
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 0.5
      text = prison
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    TextComponent text_134
      letterHeight = 0.07
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.5
      text = guard
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    TextComponent text_135
      letterHeight = 0.07
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 0.5
      text = walked
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    TextComponent text_136
      letterHeight = 0.07
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.5
      text = along
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    TextComponent text_137
      letterHeight = 0.07
      startVal [time (s)] = 14.5
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_138
      letterHeight = 0.07
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.8
      text = row.
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    TextComponent placeholder
      letterHeight = 0.1
      startVal [time (s)] = 15.8
      stopVal [duration (s)] = 1.0
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  Routine sentence_series_part3
    TextComponent text_139
      letterHeight = 0.065
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = Ted
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    TextComponent text_140
      letterHeight = 0.065
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = smiled
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    TextComponent text_141
      letterHeight = 0.065
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = and
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    TextComponent text_142
      letterHeight = 0.065
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
      text = bit
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    TextComponent text_143
      letterHeight = 0.065
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
      text = his
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    TextComponent text_144
      letterHeight = 0.065
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
      text = bottom
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    TextComponent text_145
      letterHeight = 0.065
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.8
      text = rainbow.
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    TextComponent text_146
      letterHeight = 0.06
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 0.5
      text = Steve
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    TextComponent text_147
      letterHeight = 0.06
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
      text = sat
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    TextComponent text_148
      letterHeight = 0.06
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 0.5
      text = down
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    TextComponent text_149
      letterHeight = 0.06
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.5
      text = to
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    TextComponent text_150
      letterHeight = 0.06
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 0.5
      text = eat
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    TextComponent text_151
      letterHeight = 0.06
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
      text = his
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    TextComponent text_152
      letterHeight = 0.06
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 0.8
      text = lunch.
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    TextComponent text_153
      letterHeight = 0.055
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.5
      text = I
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    TextComponent text_154
      letterHeight = 0.055
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 0.5
      text = drink
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    TextComponent text_155
      letterHeight = 0.055
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      text = coffee
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    TextComponent text_97
      letterHeight = 0.055
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 0.5
      text = with
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    TextComponent text_156
      letterHeight = 0.055
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.5
      text = milk
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    TextComponent text_157
      letterHeight = 0.055
      startVal [time (s)] = 11.5
      stopVal [duration (s)] = 0.5
      text = and
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    TextComponent text_158
      letterHeight = 0.055
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.8
      text = socks.
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    TextComponent text_159
      letterHeight = 0.05
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 0.5
      text = He
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    TextComponent text_160
      letterHeight = 0.05
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.5
      text = put
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    TextComponent text_161
      letterHeight = 0.05
      startVal [time (s)] = 14.5
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_162
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.5
      text = fork
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    TextComponent text_163
      letterHeight = 0.05
      startVal [time (s)] = 15.5
      stopVal [duration (s)] = 0.5
      text = on
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  Routine sentence_series_part4
    TextComponent text_164
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_165
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.8
      text = table.
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    TextComponent text_166
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
      text = The
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    TextComponent text_167
      letterHeight = 0.05
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
      text = prison
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    TextComponent text_168
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.5
      text = guard
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    TextComponent text_169
      letterHeight = 0.05
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.5
      text = walked
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    TextComponent text_170
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.5
      text = along
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    TextComponent text_171
      letterHeight = 0.05
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_172
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.8
      text = moon.
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    TextComponent text_173
      letterHeight = 0.05
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 0.5
      text = A
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    TextComponent text_174
      letterHeight = 0.05
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
      text = horse
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    TextComponent text_175
      letterHeight = 0.05
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 0.5
      text = has
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    TextComponent text_176
      letterHeight = 0.05
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.5
      text = thrown
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    TextComponent text_177
      letterHeight = 0.05
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 0.5
      text = a
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    TextComponent text_178
      letterHeight = 0.05
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.8
      text = shoe.
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    TextComponent text_179
      letterHeight = 0.05
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 0.5
      text = Steve
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    TextComponent text_180
      letterHeight = 0.05
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.5
      text = sat
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    TextComponent text_181
      letterHeight = 0.05
      startVal [time (s)] = 11.5
      stopVal [duration (s)] = 0.5
      text = down
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    TextComponent text_182
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
      text = to
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    TextComponent text_183
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 0.5
      text = eat
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    TextComponent text_184
      letterHeight = 0.05
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.5
      text = his
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    TextComponent text_185
      letterHeight = 0.05
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 0.8
      text = lunch.
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    TextComponent text_186
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.5
      text = A
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    TextComponent text_187
      letterHeight = 0.05
      startVal [time (s)] = 15.5
      stopVal [duration (s)] = 0.5
      text = horse
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    TextComponent text_188
      letterHeight = 0.05
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.5
      text = has
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  Routine sentence_series_part5
    TextComponent text_189
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = thrown
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    TextComponent text_190
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = a
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    TextComponent text_191
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.8
      text = plane.
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    TextComponent text_192
      letterHeight = 0.05
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
      text = He
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    TextComponent text_193
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.5
      text = put
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    TextComponent text_194
      letterHeight = 0.05
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_195
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.5
      text = fork
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    TextComponent text_196
      letterHeight = 0.05
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 0.5
      text = on
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    TextComponent text_197
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_198
      letterHeight = 0.05
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 0.8
      text = table.
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    TextComponent text_199
      letterHeight = 0.05
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
      text = Steve
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    TextComponent text_200
      letterHeight = 0.05
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 0.5
      text = sat
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    TextComponent text_201
      letterHeight = 0.05
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.5
      text = down
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    TextComponent text_202
      letterHeight = 0.05
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 0.5
      text = to
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    TextComponent text_203
      letterHeight = 0.05
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.5
      text = eat
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    TextComponent text_204
      letterHeight = 0.05
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 0.5
      text = his
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    TextComponent text_205
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.8
      text = car.
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    TextComponent text_206
      letterHeight = 0.05
      startVal [time (s)] = 11.5
      stopVal [duration (s)] = 0.5
      text = He
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    TextComponent text_207
      letterHeight = 0.05
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.5
      text = put
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    TextComponent text_208
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_209
      letterHeight = 0.05
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.5
      text = fork
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    TextComponent text_210
      letterHeight = 0.05
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 0.5
      text = on
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    TextComponent text_211
      letterHeight = 0.05
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.5
      text = the
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    TextComponent text_212
      letterHeight = 0.05
      startVal [time (s)] = 14.5
      stopVal [duration (s)] = 0.8
      text = door.
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    TextComponent text_217
      letterHeight = 0.04
      startVal [time (s)] = 16
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      text:
        Danke, Du hast 5 von 8 Aufgaben abgeschlossen.

        Du kannst jetzt eine Pause machen und dich entspannen (empfohlen 20 Sekunden).


        Du wirst nun erneut einige Bilder ansehen.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 16
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  Routine Familiar_faces_series
    TextComponent plus
      letterHeight = 0.25
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = +
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    ImageComponent image_4
      image = C:\Experiment\Familiar-unfamiliar Faces\01.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.4
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    ImageComponent image_5
      image = C:\Experiment\Familiar-unfamiliar Faces\02.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.4
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    ImageComponent image_6
      image = C:\Experiment\Familiar-unfamiliar Faces\03.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.4
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    ImageComponent image_7
      image = C:\Experiment\Familiar-unfamiliar Faces\04.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.4
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    ImageComponent image_8
      image = C:\Experiment\Familiar-unfamiliar Faces\05.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.4
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    ImageComponent image_9
      image = C:\Experiment\Familiar-unfamiliar Faces\06.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.4
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    ImageComponent image_10
      image = C:\Experiment\Familiar-unfamiliar Faces\07.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.4
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    ImageComponent image_11
      image = C:\Experiment\Familiar-unfamiliar Faces\08.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 17
      stopVal [duration (s)] = 0.4
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    ImageComponent image_12
      image = C:\Experiment\Familiar-unfamiliar Faces\09.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 19
      stopVal [duration (s)] = 0.4
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    ImageComponent image_14
      image = C:\Experiment\Familiar-unfamiliar Faces\10.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 21
      stopVal [duration (s)] = 0.4
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    ImageComponent image_15
      image = C:\Experiment\Familiar-unfamiliar Faces\11.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 23
      stopVal [duration (s)] = 0.4
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    ImageComponent image_16
      image = C:\Experiment\Familiar-unfamiliar Faces\12.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 0.4
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    TextComponent continue_6
      letterHeight = 0.04
      startVal [time (s)] = 64
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      text:
        Danke, Du hast nun alle 8 Aufgaben abgeschlossen.


        Drücke die Leertaste das Experiment abzuschließen.
    KeyboardComponent press_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 64
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    CodeComponent code_serial_8
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'v')
        ser.close()
  Routine end_of_experiment
    TextComponent text_215
      letterHeight = 0.04
      startVal [time (s)] = 4
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      text:
        Vielen herzlichen Dank für Deine Teilnahme an unserem Experiment!


        Melde Dich bitte jetzt bei Deinem Versuchsleiter.
        Dieser wird mit Dir noch eine kleine Abschlussbefragung durchführen.
  Routine eyes_closed_recording_2
    ImageComponent image_13
      image = C:\Experiment\baseline\closed.jpg
      size = (1, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 25
      stopVal [duration (s)] = 0.5
      volume = 0.6
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    TextComponent waiting_to_continue_2
      letterHeight = 0.04
      startVal [time (s)] = 27
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      text:
        Du hast 1 von 8 Aufgaben abgeschlossen.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 27
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    CodeComponent code_serial_9
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'c')
        ser.close()
  Routine n400_words_2
    TextComponent count
      letterHeight = 0.25
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = +
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    TextComponent text_30
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.3
      text = Autofahrer
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    TextComponent text_31
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.3
      text = LKW
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    TextComponent text_32
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.3
      text = Mond
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    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.3
      text = Oper
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    TextComponent text_34
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.3
      text = Geschwindigkeit
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    TextComponent text_35
      letterHeight = 0.1
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.3
      text = Leiter
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    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.3
      text = Autobahn
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    TextComponent text_37
      letterHeight = 0.1
      startVal [time (s)] = 18
      stopVal [duration (s)] = 0.3
      text = Hunger
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    TextComponent text_38
      letterHeight = 0.1
      startVal [time (s)] = 20
      stopVal [duration (s)] = 0.3
      text = Apfel
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    TextComponent text_39
      letterHeight = 0.1
      startVal [time (s)] = 22
      stopVal [duration (s)] = 0.3
      text = Fahrzeug
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    TextComponent text_40
      letterHeight = 0.1
      startVal [time (s)] = 24
      stopVal [duration (s)] = 0.3
      text = PKW
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    TextComponent text_41
      letterHeight = 0.1
      startVal [time (s)] = 26
      stopVal [duration (s)] = 0.3
      text = Kreide
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    TextComponent text_42
      letterHeight = 0.1
      startVal [time (s)] = 28
      stopVal [duration (s)] = 0.3
      text = Kreis
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    TextComponent text_43
      letterHeight = 0.1
      startVal [time (s)] = 30
      stopVal [duration (s)] = 0.3
      text = Sportwagen
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    TextComponent text_44
      letterHeight = 0.1
      startVal [time (s)] = 32
      stopVal [duration (s)] = 0.3
      text = Preis
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    TextComponent text_45
      letterHeight = 0.1
      startVal [time (s)] = 34
      stopVal [duration (s)] = 0.3
      text = Frisur
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    TextComponent text_46
      letterHeight = 0.1
      startVal [time (s)] = 36
      stopVal [duration (s)] = 0.3
      text = Schnellstraße
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    TextComponent text_47
      letterHeight = 0.1
      startVal [time (s)] = 38
      stopVal [duration (s)] = 0.3
      text = Hotel
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    TextComponent text_48
      letterHeight = 0.1
      startVal [time (s)] = 40
      stopVal [duration (s)] = 0.3
      text = Maut
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    TextComponent text_49
      letterHeight = 0.1
      startVal [time (s)] = 42
      stopVal [duration (s)] = 0.3
      text = Auto
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    TextComponent text_50
      letterHeight = 0.1
      startVal [time (s)] = 44
      stopVal [duration (s)] = 0.3
      text = Pilz
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    TextComponent text_51
      letterHeight = 0.1
      startVal [time (s)] = 46
      stopVal [duration (s)] = 0.3
      text = Auswahl
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    TextComponent text_52
      letterHeight = 0.1
      startVal [time (s)] = 48
      stopVal [duration (s)] = 0.3
      text = Automobil
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    TextComponent text_53
      letterHeight = 0.1
      startVal [time (s)] = 50
      stopVal [duration (s)] = 0.3
      text = Produzent
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    TextComponent text_54
      letterHeight = 0.1
      startVal [time (s)] = 52
      stopVal [duration (s)] = 0.3
      text = Biologie
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    TextComponent text_55
      letterHeight = 0.1
      startVal [time (s)] = 54
      stopVal [duration (s)] = 0.3
      text = Lenkrad
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    TextComponent text_56
      letterHeight = 0.1
      startVal [time (s)] = 56
      stopVal [duration (s)] = 0.3
      text = Straße
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    TextComponent text_57
      letterHeight = 0.1
      startVal [time (s)] = 58
      stopVal [duration (s)] = 0.3
      text = Küche
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    TextComponent text_58
      letterHeight = 0.1
      startVal [time (s)] = 60
      stopVal [duration (s)] = 0.3
      text = Hase
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    TextComponent text_59
      letterHeight = 0.1
      startVal [time (s)] = 62
      stopVal [duration (s)] = 0.3
      text = Studium
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    TextComponent continue_3
      letterHeight = 0.04
      startVal [time (s)] = 64
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      text:
        Du wirst nun ein letztes mal die Bilder ansehen.

        Drücke die Leertaste um mit den Bildern zu beginnen.
    KeyboardComponent press_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 64
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  Routine n400_words_3
    TextComponent count_1
      letterHeight = 0.25
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = +
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.3
      text = Hase
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    TextComponent text_1
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.3
      text = Autofahrer
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.3
      text = Automobil
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.3
      text = Frisur
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.3
      text = Hunger
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.3
      text = Auswahl
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.3
      text = Auto
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    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 18
      stopVal [duration (s)] = 0.3
      text = Oper
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 20
      stopVal [duration (s)] = 0.3
      text = Geschwindigkeit
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 22
      stopVal [duration (s)] = 0.3
      text = LKW
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    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 24
      stopVal [duration (s)] = 0.3
      text = Preis
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 26
      stopVal [duration (s)] = 0.3
      text = Maut
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    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 28
      stopVal [duration (s)] = 0.3
      text = Mond
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    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 30
      stopVal [duration (s)] = 0.3
      text = Pilz
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    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 32
      stopVal [duration (s)] = 0.3
      text = Hotel
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    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 34
      stopVal [duration (s)] = 0.3
      text = Autobahn
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    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 36
      stopVal [duration (s)] = 0.3
      text = Schnellstraße
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    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 38
      stopVal [duration (s)] = 0.3
      text = Apfel
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    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 40
      stopVal [duration (s)] = 0.3
      text = Produzent
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    TextComponent text_19
      letterHeight = 0.1
      startVal [time (s)] = 42
      stopVal [duration (s)] = 0.3
      text = Biologie
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    TextComponent text_20
      letterHeight = 0.1
      startVal [time (s)] = 44
      stopVal [duration (s)] = 0.3
      text = Lenkrad
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    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 46
      stopVal [duration (s)] = 0.3
      text = Kreide
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    TextComponent text_22
      letterHeight = 0.1
      startVal [time (s)] = 48
      stopVal [duration (s)] = 0.3
      text = Straße
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    TextComponent text_23
      letterHeight = 0.1
      startVal [time (s)] = 50
      stopVal [duration (s)] = 0.3
      text = Leiter
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    TextComponent text_24
      letterHeight = 0.1
      startVal [time (s)] = 52
      stopVal [duration (s)] = 0.3
      text = Kreis
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    TextComponent text_25
      letterHeight = 0.1
      startVal [time (s)] = 54
      stopVal [duration (s)] = 0.3
      text = Fahrzeug
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    TextComponent text_26
      letterHeight = 0.1
      startVal [time (s)] = 56
      stopVal [duration (s)] = 0.3
      text = Sportwagen
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    TextComponent text_27
      letterHeight = 0.1
      startVal [time (s)] = 58
      stopVal [duration (s)] = 0.3
      text = Küche
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    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 60
      stopVal [duration (s)] = 0.3
      text = PKW
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    TextComponent text_29
      letterHeight = 0.1
      startVal [time (s)] = 62
      stopVal [duration (s)] = 0.3
      text = Studium
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    TextComponent continue_2
      letterHeight = 0.04
      startVal [time (s)] = 64
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      text:
        Danke, Du hast 7 von 8 Aufgaben abgeschlossen.


        Du wirst nun noch einige Bilder ansehen.
        Schaue aufmerksam zu.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 64
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    CodeComponent code_serial_11
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'u')
        ser.close()
  Routine n400_words_1
    TextComponent count_2
      letterHeight = 0.25
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = +
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    TextComponent text_60
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.3
      text = Hase
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    TextComponent text_61
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.3
      text = Autofahrer
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    TextComponent text_62
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.3
      text = Automobil
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    TextComponent text_63
      letterHeight = 0.1
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.3
      text = Frisur
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    TextComponent text_64
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.3
      text = Hunger
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    TextComponent text_65
      letterHeight = 0.1
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.3
      text = Auswahl
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    TextComponent text_66
      letterHeight = 0.1
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.3
      text = Auto
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    TextComponent text_67
      letterHeight = 0.1
      startVal [time (s)] = 18
      stopVal [duration (s)] = 0.3
      text = Oper
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    TextComponent text_68
      letterHeight = 0.1
      startVal [time (s)] = 20
      stopVal [duration (s)] = 0.3
      text = Geschwindigkeit
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    TextComponent text_69
      letterHeight = 0.1
      startVal [time (s)] = 22
      stopVal [duration (s)] = 0.3
      text = LKW
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    TextComponent text_70
      letterHeight = 0.1
      startVal [time (s)] = 24
      stopVal [duration (s)] = 0.3
      text = Preis
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    TextComponent text_71
      letterHeight = 0.1
      startVal [time (s)] = 26
      stopVal [duration (s)] = 0.3
      text = Maut
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    TextComponent text_72
      letterHeight = 0.1
      startVal [time (s)] = 28
      stopVal [duration (s)] = 0.3
      text = Mond
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    TextComponent text_73
      letterHeight = 0.1
      startVal [time (s)] = 30
      stopVal [duration (s)] = 0.3
      text = Pilz
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    TextComponent text_74
      letterHeight = 0.1
      startVal [time (s)] = 32
      stopVal [duration (s)] = 0.3
      text = Hotel
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    TextComponent text_75
      letterHeight = 0.1
      startVal [time (s)] = 34
      stopVal [duration (s)] = 0.3
      text = Autobahn
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    TextComponent text_76
      letterHeight = 0.1
      startVal [time (s)] = 36
      stopVal [duration (s)] = 0.3
      text = Schnellstraße
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    TextComponent text_77
      letterHeight = 0.1
      startVal [time (s)] = 38
      stopVal [duration (s)] = 0.3
      text = Apfel
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    TextComponent text_78
      letterHeight = 0.1
      startVal [time (s)] = 40
      stopVal [duration (s)] = 0.3
      text = Produzent
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    TextComponent text_79
      letterHeight = 0.1
      startVal [time (s)] = 42
      stopVal [duration (s)] = 0.3
      text = Biologie
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    TextComponent text_80
      letterHeight = 0.1
      startVal [time (s)] = 44
      stopVal [duration (s)] = 0.3
      text = Lenkrad
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    TextComponent text_81
      letterHeight = 0.1
      startVal [time (s)] = 46
      stopVal [duration (s)] = 0.3
      text = Kreide
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    TextComponent text_82
      letterHeight = 0.1
      startVal [time (s)] = 48
      stopVal [duration (s)] = 0.3
      text = Straße
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    TextComponent text_83
      letterHeight = 0.1
      startVal [time (s)] = 50
      stopVal [duration (s)] = 0.3
      text = Leiter
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    TextComponent text_84
      letterHeight = 0.1
      startVal [time (s)] = 52
      stopVal [duration (s)] = 0.3
      text = Kreis
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    TextComponent text_85
      letterHeight = 0.1
      startVal [time (s)] = 54
      stopVal [duration (s)] = 0.3
      text = Fahrzeug
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    TextComponent text_86
      letterHeight = 0.1
      startVal [time (s)] = 56
      stopVal [duration (s)] = 0.3
      text = Sportwagen
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    TextComponent text_87
      letterHeight = 0.1
      startVal [time (s)] = 58
      stopVal [duration (s)] = 0.3
      text = Küche
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    TextComponent text_88
      letterHeight = 0.1
      startVal [time (s)] = 60
      stopVal [duration (s)] = 0.3
      text = PKW
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    TextComponent text_89
      letterHeight = 0.1
      startVal [time (s)] = 62
      stopVal [duration (s)] = 0.3
      text = Studium
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    TextComponent continue_4
      letterHeight = 0.04
      startVal [time (s)] = 64
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      text:
        Danke, Du hast 3 von 8 Aufgaben abgeschlossen.


        Du wirst nun ein weiteres Video ansehen.
        Schaue aufmerksam zu.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent press_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 64
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    CodeComponent code_serial_12
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'l')
        ser.close()
  Routine break_2b
    TextComponent text_237
      letterHeight = 0.04
      startVal [time (s)] = 1
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      text:
        Du wirst nun ein Video ansehen.

        Nach dem Video wirst Du gebeten, drei Begriffe, die Du mit dem Video assozierst, zu notieren.


        Drücke die Leertaste, um jetzt mit dem Video zu beginnen.
    KeyboardComponent terminate_key_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_serial_13
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'i')
        ser.close()
  Routine break_2a
    TextComponent text_213
      letterHeight = 0.04
      startVal [time (s)] = 1
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      text:
        Vielen Dank, Du hast 2 von 8 Aufgaben abgeschlossen.
        Du kannst jetzt eine kurze Pause machen. (Empfohlen etwa 20 Sekunden)

        Drücke jederzeit die Leertaste, um fortzufahren.
    KeyboardComponent terminate_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine p300_series2_1
    ImageComponent image
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
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    ImageComponent image_80
      image = C:\Experiment\p300-Fotos\box 2\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.2
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    ImageComponent image_81
      image = C:\Experiment\p300-Fotos\box 2\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.2
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    ImageComponent image_82
      image = C:\Experiment\p300-Fotos\box 2\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_83
      image = C:\Experiment\p300-Fotos\box 2\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.2
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    ImageComponent image_84
      image = C:\Experiment\p300-Fotos\box 2\07.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.2
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    ImageComponent image_85
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.2
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    ImageComponent image_86
      image = C:\Experiment\p300-Fotos\box 2\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.2
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    ImageComponent image_87
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.2
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    ImageComponent image_88
      image = C:\Experiment\p300-Fotos\box 2\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.2
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    ImageComponent image_89
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.2
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    ImageComponent image_90
      image = C:\Experiment\p300-Fotos\box 2\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.2
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    ImageComponent image_91
      image = C:\Experiment\p300-Fotos\box 2\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.2
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    ImageComponent image_92
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.2
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    ImageComponent image_93
      image = C:\Experiment\p300-Fotos\box 2\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.2
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    ImageComponent image_96
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 19
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_104
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 27
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_110
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 33
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_114
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 37
      stopVal [duration (s)] = 0.2
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    TextComponent end
      letterHeight = 0.04
      startVal [time (s)] = 42
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      text:
        Wie häufig hast Du das zugewiesene Bild erkannt?

        Schreibe die Anzahl auf die dafür vorgesehene Stelle auf Deinem Papier.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 42
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  Routine p300_series1_2
    ImageComponent image_119
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
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    ImageComponent image_120
      image = C:\Experiment\p300-Fotos\box 1\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.2
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    ImageComponent image_121
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.2
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    ImageComponent image_122
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_123
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.2
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    ImageComponent image_124
      image = C:\Experiment\p300-Fotos\box 1\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.2
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    ImageComponent image_125
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.2
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    ImageComponent image_126
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.2
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    ImageComponent image_127
      image = C:\Experiment\p300-Fotos\box 1\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.2
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    ImageComponent image_128
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.2
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    ImageComponent image_129
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.2
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    ImageComponent image_130
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.2
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    ImageComponent image_131
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.2
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    ImageComponent image_132
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.2
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    ImageComponent image_133
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_137
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 0.2
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    ImageComponent image_144
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 27
      stopVal [duration (s)] = 0.2
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    ImageComponent image_149
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 32
      stopVal [duration (s)] = 0.2
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    ImageComponent image_152
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 35
      stopVal [duration (s)] = 0.2
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    ImageComponent image_157
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 0.2
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
    TextComponent end_3
      letterHeight = 0.04
      startVal [time (s)] = 42
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      text:
        Wie häufig hast Du Dein Bild erkannt?

        Schreibe die Anzahl auf die dafür vorgesehene Stelle auf Deinem Papier.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 42
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  Routine p300_series2_2
    ImageComponent image_2
      image = C:\Experiment\p300-Fotos\box 2\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
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    ImageComponent image_199
      image = C:\Experiment\p300-Fotos\box 2\07.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.2
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    ImageComponent image_200
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.2
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    ImageComponent image_201
      image = C:\Experiment\p300-Fotos\box 2\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_202
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.2
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    ImageComponent image_203
      image = C:\Experiment\p300-Fotos\box 2\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.2
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    ImageComponent image_204
      image = C:\Experiment\p300-Fotos\box 2\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.2
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    ImageComponent image_205
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.2
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    ImageComponent image_206
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.2
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    ImageComponent image_207
      image = C:\Experiment\p300-Fotos\box 2\07.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.2
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    ImageComponent image_208
      image = C:\Experiment\p300-Fotos\box 2\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.2
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    ImageComponent image_209
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.2
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    ImageComponent image_210
      image = C:\Experiment\p300-Fotos\box 2\07.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.2
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    ImageComponent image_211
      image = C:\Experiment\p300-Fotos\box 2\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_213
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 17
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_219
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 23
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_225
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 29
      stopVal [duration (s)] = 0.2
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    ImageComponent image_232
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 36
      stopVal [duration (s)] = 0.2
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
    TextComponent end_5
      letterHeight = 0.04
      startVal [time (s)] = 42
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      text:
        Wie häufig hast Du das zugewiesene Bild erkannt?

        Schreibe die Anzahl auf die dafür vorgesehene Stelle auf Deinem Papier.

        Drücke die Leertaste um die Aufgabe zu beenden.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 42
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    CodeComponent code_serial_14
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'h')
        ser.close()
  Routine break3
    TextComponent text_239
      letterHeight = 0.04
      startVal [time (s)] = 1
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      text:
        Du wirst nun eine Wörterserie sehen. Lies aufmerksam mit.

        Drücke die Leertaste um mit der Wörterserie zu beginnen.
    KeyboardComponent key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_serial_19
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'k')
        ser.close()
  Routine break_1
    TextComponent text_240
      letterHeight = 0.04
      startVal [time (s)] = 0.5
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      text:
        Die nun folgende Aufgabe wirst du während des Experiments insgesamt sechs mal sehen.

        Du wirst während der Aufgabe eine Reihe von Bildern sehen.


        Drücke die Leertaste um mit der Aufgabe zu beginnen.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine n400_subliminal_sw
    TextComponent introduction_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Das Video beginnt jetzt.

        Schaue aufmerksam zu.
    MovieComponent movie_3
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = C:\Experiment\Subliminal Priming Video\sw_priming_video.avi
      size = [1.8,1.8]
      startVal [time (s)] = 7
      stopVal [duration (s)] = 52
      units = norm
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    TextComponent continue_5
      letterHeight = 0.04
      startVal [time (s)] = 62
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      text:
        Du wirst nun die Wörterserie erneut ansehen.

        Schaue aufmerksam zu.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 62
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    CodeComponent code_serial_21
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b't')
        ser.close()
  Routine break_3
    TextComponent text_241
      letterHeight = 0.04
      startVal [time (s)] = 1
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      text:
        Du hast jetzt 6 von 8 Aufgaben abgeschlossen.

        Du wirst nun erneut ein Dir bereits bekanntes Video sehen.


        Drücke die Leertaste, um jetzt mit dem Video zu beginnen.
    KeyboardComponent terminate_key_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_serial_22
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'p')
        ser.close()
  Routine p300_start_series1
    TextComponent text_242
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Erinnere Dich jetzt an das Bild, welches Du selbst zu Beginn des Experiment ausgewählt hast.

        Deine Aufgabe ist es im folgenden, zu zählen wie oft genau dieses Bild vorkommt.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_serial_23
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'd')
        ser.close()
  Routine p300_series1_1
    ImageComponent image_40
      image = C:\Experiment\p300-Fotos\box 1\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
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    ImageComponent image_41
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.2
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    ImageComponent image_42
      image = C:\Experiment\p300-Fotos\box 1\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.2
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    ImageComponent image_43
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_44
      image = C:\Experiment\p300-Fotos\box 1\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.2
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    ImageComponent image_45
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.2
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    ImageComponent image_46
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.2
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    ImageComponent image_47
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.2
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    ImageComponent image_48
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.2
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    ImageComponent image_49
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.2
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    ImageComponent image_50
      image = C:\Experiment\p300-Fotos\box 1\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.2
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    ImageComponent image_51
      image = C:\Experiment\p300-Fotos\box 1\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.2
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    ImageComponent image_52
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_54
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.2
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    ImageComponent image_59
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 21
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_67
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 29
      stopVal [duration (s)] = 0.2
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    ImageComponent image_74
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 36
      stopVal [duration (s)] = 0.2
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
    TextComponent end_2
      letterHeight = 0.04
      startVal [time (s)] = 42
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      text:
        Wie häufig hast Du Dein Bild erkannt?

        Schreibe die Anzahl auf die dafür vorgesehene Stelle auf Deinem Papier.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 42
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  Routine p300_start_series2
    TextComponent text_243
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Du wirst nun wieder eine Reihe von Bildern sehen.

        Erinnere Dich jetzt an das Bild, welches Dir zu Beginn des Experiments zugewiesen wurde.

        Deine Aufgabe ist es wieder, zu zählen wie oft genau dieses Bild vorkommt.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_serial_24
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'e')
        ser.close()
  Routine p300_start_series1_2
    TextComponent start
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Erinnere Dich jetzt an das Bild, welches Du zu Beginn des Experiment ausgewählt hast.

        Deine Aufgabe ist es wieder, zu zählen wie oft genau dieses Bild vorkommt.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_serial_20
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'f')
        ser.close()
  Routine break_4
    TextComponent text_244
      letterHeight = 0.04
      startVal [time (s)] = 1
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      text:
        Du wirst nun eine Wörterserie erneut sehen.

        Lies aufmerksam mit.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_serial_25
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b't')
        ser.close()
  Routine p300_start_series2_2
    TextComponent text_245
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Du wirst nun wieder eine Reihe von Bildern sehen.

        Erinnere Dich jetzt an das Bild, welches Dir zu Beginn des Experiments zugewiesen wurde.

        Deine Aufgabe ist es wieder, zu zählen wie oft genau dieses Bild vorkommt.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_serial_26
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'g')
        ser.close()
  Routine p300_start_series1_3
    TextComponent start_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Erinnere Dich jetzt an das Bild, welches Du zu Beginn des Experiment ausgewählt hast.

        Deine Aufgabe ist es wieder, zu zählen wie oft genau dieses Bild vorkommt.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_serial_27
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'n')
        ser.close()
  Routine p300_series1_3
    ImageComponent image_277
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
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    ImageComponent image_278
      image = C:\Experiment\p300-Fotos\box 1\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.2
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    ImageComponent image_279
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.2
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    ImageComponent image_280
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_281
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.2
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    ImageComponent image_282
      image = C:\Experiment\p300-Fotos\box 1\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.2
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    ImageComponent image_283
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.2
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    ImageComponent image_284
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.2
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    ImageComponent image_285
      image = C:\Experiment\p300-Fotos\box 1\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.2
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    ImageComponent image_286
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.2
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    ImageComponent image_287
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.2
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    ImageComponent image_288
      image = C:\Experiment\p300-Fotos\box 1\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.2
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    ImageComponent image_289
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.2
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    ImageComponent image_290
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.2
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    ImageComponent image_291
      image = C:\Experiment\p300-Fotos\box 1\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_295
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 0.2
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    ImageComponent image_302
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 27
      stopVal [duration (s)] = 0.2
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    ImageComponent image_307
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 32
      stopVal [duration (s)] = 0.2
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    ImageComponent image_310
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 35
      stopVal [duration (s)] = 0.2
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    ImageComponent image_315
      image = C:\Experiment\p300-Fotos\box 1\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 0.2
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
    TextComponent end_7
      letterHeight = 0.04
      startVal [time (s)] = 42
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      text:
        Wie häufig hast Du Dein Bild erkannt?

        Schreibe die Anzahl auf die dafür vorgesehene Stelle auf Deinem Papier.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 42
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    CodeComponent code_serial_29
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'o')
        ser.close()
  Routine p300_series2_3
    ImageComponent image_3
      image = C:\Experiment\p300-Fotos\box 2\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
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    ImageComponent image_238
      image = C:\Experiment\p300-Fotos\box 2\07.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.2
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    ImageComponent image_239
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.2
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    ImageComponent image_240
      image = C:\Experiment\p300-Fotos\box 2\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_241
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.2
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    ImageComponent image_242
      image = C:\Experiment\p300-Fotos\box 2\03.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.2
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    ImageComponent image_243
      image = C:\Experiment\p300-Fotos\box 2\02.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.2
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    ImageComponent image_244
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.2
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    ImageComponent image_245
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.2
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    ImageComponent image_246
      image = C:\Experiment\p300-Fotos\box 2\07.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 11
      stopVal [duration (s)] = 0.2
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    ImageComponent image_247
      image = C:\Experiment\p300-Fotos\box 2\05.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 0.2
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    ImageComponent image_248
      image = C:\Experiment\p300-Fotos\box 2\06.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.2
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    ImageComponent image_249
      image = C:\Experiment\p300-Fotos\box 2\07.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 0.2
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    ImageComponent image_250
      image = C:\Experiment\p300-Fotos\box 2\04.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_252
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 17
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_258
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 23
      stopVal [duration (s)] = 0.2
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
    ImageComponent image_264
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 29
      stopVal [duration (s)] = 0.2
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    ImageComponent image_271
      image = C:\Experiment\p300-Fotos\box 2\X.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 36
      stopVal [duration (s)] = 0.2
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
    TextComponent end_6
      letterHeight = 0.04
      startVal [time (s)] = 42
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      text:
        Wie häufig hast Du das zugewiesene Bild erkannt?

        Schreibe die Anzahl auf die dafür vorgesehene Stelle auf Deinem Papier.

        Drücke die Leertaste um die Aufgabe zu beenden.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 42
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    CodeComponent code_serial_15
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b's')
        ser.close()
  Routine p300_start_series2_3
    TextComponent text_246
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Du wirst nun wieder eine Reihe von Bildern sehen.

        Erinnere Dich jetzt an das Bild, welches Dir zu Beginn des Experiments zugewiesen wurde.

        Deine Aufgabe ist es wieder, zu zählen wie oft genau dieses Bild vorkommt.

        Drücke die Leertaste um zu beginnen.
    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_serial_28
      Code Type = Py
      Begin Experiment:
        import serial
      End Routine:
        ser = serial.Serial('COM1')
        ser.write(b'r')
        ser.close()
Flow
  Routine instr
  Routine baseline_recording
  Routine eyes_closed_recording_2
  Routine break_1
  Routine p300_start_series1
  Routine p300_series1_1
  Routine p300_start_series2
  Routine p300_series2_1
  Routine p300_start_series1_2
  Routine p300_series1_2
  Routine p300_start_series2_2
  Routine p300_series2_2
  Routine break_2a
  Routine break_2b
  Routine n400_video
  Routine break3
  Routine n400_words_1
  Routine n400_subliminal_video
  Routine sentence_series_part1
  Routine sentence_series_part2
  Routine sentence_series_part3
  Routine sentence_series_part4
  Routine sentence_series_part5
  Routine p300_start_series1_3
  Routine p300_series1_3
  Routine break_3
  Routine n400_video_2
  Routine n400_words_2
  Routine p300_start_series2_3
  Routine p300_series2_3
  Routine break_4
  Routine n400_words_3
  Routine Familiar_faces_series
  Routine end_of_experiment
